<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>C:\Users\mahmadlou\Desktop\AllNovelObjects_NoOpto_1\movie.avi</cv:FileName>
          <cv:PlaybackRate>0</cv:PlaybackRate>
          <cv:StartPosition>0</cv:StartPosition>
          <cv:PositionUnits>AviRatio</cv:PositionUnits>
          <cv:Loop>false</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>9</cv:X>
            <cv:Y>16</cv:Y>
            <cv:Width>877</cv:Width>
            <cv:Height>904</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ColorBalance">
          <cv:Scale>
            <cv:Val0>1</cv:Val0>
            <cv:Val1>3</cv:Val1>
            <cv:Val2>5</cv:Val2>
            <cv:Val3>5</cv:Val3>
          </cv:Scale>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:HsvThreshold">
          <cv:Lower>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>30</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Lower>
          <cv:Upper>
            <cv:Val0>179</cv:Val0>
            <cv:Val1>255</cv:Val1>
            <cv:Val2>255</cv:Val2>
            <cv:Val3>255</cv:Val3>
          </cv:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:HsvThreshold">
          <cv:Lower>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>75</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Lower>
          <cv:Upper>
            <cv:Val0>179</cv:Val0>
            <cv:Val1>255</cv:Val1>
            <cv:Val2>255</cv:Val2>
            <cv:Val3>255</cv:Val3>
          </cv:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>1000</cv:MinArea>
          <cv:MaxArea>400000</cv:MaxArea>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Pow">
          <dsp:Power>2</dsp:Power>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Pow">
          <dsp:Power>2</dsp:Power>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Pow">
          <dsp:Power>0.5</dsp:Power>
        </Combinator>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\mahmadlou\Desktop\AllNovelObjects_NoOpto_1\Bontrack\speed.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:CompatibilityMode>true</io:CompatibilityMode>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\mahmadlou\Desktop\AllNovelObjects_NoOpto_1\Bontrack\center.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:CompatibilityMode>true</io:CompatibilityMode>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="8" To="14" Label="Source1" />
      <Edge From="8" To="22" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="9" To="11" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="19" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="14" To="16" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source2" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>