<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>1120524_29112021\1120524_29112021_Opto.avi</cv:FileName>
          <cv:PlaybackRate>0</cv:PlaybackRate>
          <cv:StartPosition>0</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>false</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>167</cv:X>
            <cv:Y>12</cv:Y>
            <cv:Width>526</cv:Width>
            <cv:Height>932</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ColorBalance">
          <cv:Scale>
            <cv:Val0>1</cv:Val0>
            <cv:Val1>3</cv:Val1>
            <cv:Val2>5</cv:Val2>
            <cv:Val3>5</cv:Val3>
          </cv:Scale>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:HsvThreshold">
          <cv:Lower>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>30</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Lower>
          <cv:Upper>
            <cv:Val0>179</cv:Val0>
            <cv:Val1>255</cv:Val1>
            <cv:Val2>255</cv:Val2>
            <cv:Val3>255</cv:Val3>
          </cv:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:HsvThreshold">
          <cv:Lower>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>75</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Lower>
          <cv:Upper>
            <cv:Val0>179</cv:Val0>
            <cv:Val1>255</cv:Val1>
            <cv:Val2>255</cv:Val2>
            <cv:Val3>255</cv:Val3>
          </cv:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>1000</cv:MinArea>
          <cv:MaxArea>1000000</cv:MaxArea>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Pow">
          <dsp:Power>2</dsp:Power>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Pow">
          <dsp:Power>2</dsp:Power>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Pow">
          <dsp:Power>0.5</dsp:Power>
        </Combinator>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>1120524_29112021\Opto\speed.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:CompatibilityMode>true</io:CompatibilityMode>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>1120524_29112021\Opto\center.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:CompatibilityMode>true</io:CompatibilityMode>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>1120524_29112021\Opto\crop.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:CompatibilityMode>true</io:CompatibilityMode>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>1120524_29112021\Opto\crop.avi</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>true</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>25</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>1120524_29112021\1120524_29112021_NoOpto_before.avi</cv:FileName>
          <cv:PlaybackRate>0</cv:PlaybackRate>
          <cv:StartPosition>0</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>false</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>167</cv:X>
            <cv:Y>12</cv:Y>
            <cv:Width>526</cv:Width>
            <cv:Height>932</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ColorBalance">
          <cv:Scale>
            <cv:Val0>1</cv:Val0>
            <cv:Val1>3</cv:Val1>
            <cv:Val2>5</cv:Val2>
            <cv:Val3>5</cv:Val3>
          </cv:Scale>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:HsvThreshold">
          <cv:Lower>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>30</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Lower>
          <cv:Upper>
            <cv:Val0>179</cv:Val0>
            <cv:Val1>255</cv:Val1>
            <cv:Val2>255</cv:Val2>
            <cv:Val3>255</cv:Val3>
          </cv:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:HsvThreshold">
          <cv:Lower>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>75</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Lower>
          <cv:Upper>
            <cv:Val0>179</cv:Val0>
            <cv:Val1>255</cv:Val1>
            <cv:Val2>255</cv:Val2>
            <cv:Val3>255</cv:Val3>
          </cv:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>1000</cv:MinArea>
          <cv:MaxArea>1000000</cv:MaxArea>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Pow">
          <dsp:Power>2</dsp:Power>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Pow">
          <dsp:Power>2</dsp:Power>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Pow">
          <dsp:Power>0.5</dsp:Power>
        </Combinator>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>1120524_29112021\BeforeOpto\speed.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:CompatibilityMode>true</io:CompatibilityMode>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>1120524_29112021\BeforeOpto\center.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:CompatibilityMode>true</io:CompatibilityMode>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>1120524_29112021\BeforeOpto\crop.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:CompatibilityMode>true</io:CompatibilityMode>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>1120524_29112021\BeforeOpto\crop.avi</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>true</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>25</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>1120524_29112021\1120524_29112021_NoOpto_after.avi</cv:FileName>
          <cv:PlaybackRate>0</cv:PlaybackRate>
          <cv:StartPosition>0</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>false</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>167</cv:X>
            <cv:Y>12</cv:Y>
            <cv:Width>526</cv:Width>
            <cv:Height>932</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ColorBalance">
          <cv:Scale>
            <cv:Val0>1</cv:Val0>
            <cv:Val1>3</cv:Val1>
            <cv:Val2>5</cv:Val2>
            <cv:Val3>5</cv:Val3>
          </cv:Scale>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:HsvThreshold">
          <cv:Lower>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>30</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Lower>
          <cv:Upper>
            <cv:Val0>179</cv:Val0>
            <cv:Val1>255</cv:Val1>
            <cv:Val2>255</cv:Val2>
            <cv:Val3>255</cv:Val3>
          </cv:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:HsvThreshold">
          <cv:Lower>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>75</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Lower>
          <cv:Upper>
            <cv:Val0>179</cv:Val0>
            <cv:Val1>255</cv:Val1>
            <cv:Val2>255</cv:Val2>
            <cv:Val3>255</cv:Val3>
          </cv:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>1000</cv:MinArea>
          <cv:MaxArea>1000000</cv:MaxArea>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Pow">
          <dsp:Power>2</dsp:Power>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Pow">
          <dsp:Power>2</dsp:Power>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Pow">
          <dsp:Power>0.5</dsp:Power>
        </Combinator>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>1120524_29112021\AfterOpto\speed.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:CompatibilityMode>true</io:CompatibilityMode>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>1120524_29112021\AfterOpto\center.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:CompatibilityMode>true</io:CompatibilityMode>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>1120524_29112021\AfterOpto\crop.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:CompatibilityMode>true</io:CompatibilityMode>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>1120524_29112021\AfterOpto\crop.avi</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>true</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>25</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="24" Label="Source1" />
      <Edge From="1" To="25" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="7" To="23" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="8" To="14" Label="Source1" />
      <Edge From="8" To="22" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="9" To="11" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="19" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="14" To="16" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source2" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="27" To="50" Label="Source1" />
      <Edge From="27" To="51" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="33" To="49" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="34" To="40" Label="Source1" />
      <Edge From="34" To="48" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="35" To="37" Label="Source2" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="45" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="40" To="42" Label="Source2" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source2" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="52" To="53" Label="Source1" />
      <Edge From="53" To="54" Label="Source1" />
      <Edge From="53" To="76" Label="Source1" />
      <Edge From="53" To="77" Label="Source1" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="55" To="56" Label="Source1" />
      <Edge From="56" To="57" Label="Source1" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="58" To="59" Label="Source1" />
      <Edge From="59" To="60" Label="Source1" />
      <Edge From="59" To="75" Label="Source1" />
      <Edge From="60" To="61" Label="Source1" />
      <Edge From="60" To="66" Label="Source1" />
      <Edge From="60" To="74" Label="Source1" />
      <Edge From="61" To="62" Label="Source1" />
      <Edge From="61" To="63" Label="Source2" />
      <Edge From="62" To="63" Label="Source1" />
      <Edge From="63" To="64" Label="Source1" />
      <Edge From="64" To="65" Label="Source1" />
      <Edge From="65" To="71" Label="Source1" />
      <Edge From="66" To="67" Label="Source1" />
      <Edge From="66" To="68" Label="Source2" />
      <Edge From="67" To="68" Label="Source1" />
      <Edge From="68" To="69" Label="Source1" />
      <Edge From="69" To="70" Label="Source1" />
      <Edge From="70" To="71" Label="Source2" />
      <Edge From="71" To="72" Label="Source1" />
      <Edge From="72" To="73" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>